PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = $[-1.000,-1.000,-1.000]
  expName = IAT
  logging level = warning
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Routines
  Routine trial
    CodeComponent trials_code
      Code Type = Py
      Begin Experiment:
        #declare accuracy feedback message variable
        msg=""

        # debugging (Anzu)
        image_stimulus = ""
      Begin Routine:
        # choose a random exemplar from the appropriate trial type list
        if trial_type == 1:
            text_stimulus = text_trial_type_1_trials.pop()
            image_stimulus = img_trial_type_1_trials.pop()
        elif trial_type == 2:
            text_stimulus = text_trial_type_2_trials.pop()
            image_stimulus = img_trial_type_2_trials.pop()
        elif trial_type == 3:
            text_stimulus = text_trial_type_3_trials.pop()
            image_stimulus = img_trial_type_3_trials.pop()
        elif trial_type == 4:
            text_stimulus = text_trial_type_4_trials.pop()
            image_stimulus = img_trial_type_4_trials.pop()

        # set stimulus colors based on trial type
        if trial_type == 1 or trial_type == 2:
             stimulusColor = [1, 1, 1]
        elif trial_type >2:
             stimulusColor = [-1, 1, -1]

        # set required and feedback responses
        # attributes are invariate across blocks so can be determined based on trial type only
        if trial_type == 3: #pos
            requiredAllowed = "i"
            requiredCorrect = "i"
            feedbackAllowed = "e"
            feedbackCorrect = "e"
        elif trial_type == 4: #neg
            requiredAllowed = "e"
            requiredCorrect = "e"
            feedbackAllowed = "i"
            feedbackCorrect = "i"
        # categories depend on block order, current block and trial type

        if block_order == 1:
            if blocks.thisN <= 3:
                if trial_type == 1: #flowers
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"
                elif trial_type == 2: #insects
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
            elif blocks.thisN >= 3:
                if trial_type == 1: #flowers
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
                elif trial_type == 2: #insects
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"

        elif block_order == 2:
            if blocks.thisN <= 3:
                if trial_type == 1: #flowers
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
                elif trial_type == 2: #insects
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"
            elif blocks.thisN >= 3:
                if trial_type == 1: #flowers
                    requiredAllowed = "i"
                    requiredCorrect = "i"
                    feedbackAllowed = "e"
                    feedbackCorrect = "e"
                elif trial_type == 2: #insects
                    requiredAllowed = "e"
                    requiredCorrect = "e"
                    feedbackAllowed = "i"
                    feedbackCorrect = "i"
      Each Frame:
        if len(feedbackResponse.keys)<1:
            msg=""
        else:
            msg="X"
    ImageComponent stimulusImageBox
      image [set every repeat] = $image_stimulus
      size = .6
      startVal [time (s)] = 0.3
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    TextComponent stimulusTextBox
      color [set every repeat] = $stimulusColor
      letterHeight = 0.1
      startVal [time (s)] = 0.3
      text [set every repeat] = $text_stimulus
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    KeyboardComponent requiredResponse
      allowedKeys [set every repeat] = requiredAllowed
      correctAns = $requiredCorrect 
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      store = first key
      storeCorrect = True
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    KeyboardComponent feedbackResponse
      allowedKeys [set every repeat] = feedbackAllowed
      correctAns = $feedbackCorrect 
      forceEndRoutine = False
      startVal [time (s)] = .3
      store = first key
      storeCorrect = True
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    TextComponent feedback
      color = red
      letterHeight = 0.2
      pos = [0, -.5]
      startVal [time (s)] = .3
      text [set every frame] = $msg
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    TextComponent leftCategoryLabel
      letterHeight = 0.1
      pos = [-.6, .85]
      startVal [time (s)] = 0
      text [set every repeat] = $leftCategory
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    TextComponent rightCategoryLabel
      letterHeight = 0.1
      pos = [.6, .85]
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightCategory
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    TextComponent leftAttributeLabel
      color = $[-1, 1, -1]
      letterHeight = 0.1
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      text [set every repeat] = $leftAttribute
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    TextComponent rightAttributeLabel
      color = $[-1, 1, -1]
      letterHeight = 0.1
      pos = [.6, 0.55]
      startVal [time (s)] = 0.0
      text [set every repeat] = $rightAttribute
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    TextComponent orLeft
      letterHeight = 0.1
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      text [set every repeat] = $orStimulus
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    TextComponent orRight
      letterHeight = 0.1
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      text [set every repeat] = $orStimulus
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    TextComponent text_DEBUGGING
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $image_stimulus
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  Routine instruction
    CodeComponent block_code
      Code Type = Py
      Begin Experiment:
        # Dependencies
        import itertools  # for flattening lists of lists into lists
        import random
        import math  # for math.ceil() rounding up

        # Import stimuli exemplars
        exemplars_filename = 'stimuli.xlsx'
        exemplars = data.importConditions(exemplars_filename)# Import stimuli exemplars

        # Determine rows of examplars (i.e., max number of rows)
        """
        This method creates a fully counterbalanced presentation of exemplars when there are 5
        of them, but it will not present each one an equal number of times it the n diverges from 5.
        """
        n_exemplars = len(exemplars)
        print(n_exemplars)

        list_multiplier = int(math.ceil(10/n_exemplars))  # math.ceil() rounds up. 10 is the derived from way block lengths are calculated. Admittedly, this comment doensn't adequately document why it's ten. Honestly, I have to work it out of my fingers every time and can't explain it.

        # Trial generation function
        def generate_trials(trial_type_column, multiplier):
            """Generate a shuffled list of stimuli exemplars from a column in an excel stimuli file"""
            a = dict()  # declare a dict to be populated
            for i in range(len(exemplars)):
                a[i] = [exemplars[i][trial_type_column]] * multiplier  # populate the dict from vertical reads of the conditions
            a = a.values()  # extract only values (and not keys) from the list of dicts
            a = list(itertools.chain(*a))  # flatten the list of dicts into a list
            random.shuffle(a)  # shuffle this list, so that it can be drawn from by the trials
            return a

        # declare trial rows (not sure if necessary, but can't be bothered to removed and test)
        trial_rows = ""

        # set block order based on participant code
        participantNumber = int(expInfo['participant'])
        if (participantNumber % 2) == 1:
            block_order = 1
        elif (participantNumber % 2) == 0:
            block_order = 2
        else:
            print("****condition file error: please enter a numeric participant code****")
      Begin Routine:
        # set the block length and the rows to pull from based on the current block
        # this layout follows Nosek et al. 2007, "The Implicit Association Test at age 7: A methodological and conceptual review"
        if blocks.thisN == 0:
            trial_rows = "0:2"
            n_block_repeats = 10   #2*10 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 1:
            trial_rows = "2:4"
            n_block_repeats = 10   #2*10 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 2:
            trial_rows = "0:4"
            n_block_repeats = 5   #4*5 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 3:
            trial_rows = "0:4"
            n_block_repeats = 10   #4*10 = 40 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 4:
            trial_rows = "0:2"
            n_block_repeats = 20   #2*20 = 40 trials
            modified_list_multiplier = list_multiplier * 2  # because this block has a different trials:categories ratio
        elif blocks.thisN == 5:
            trial_rows = "0:4"
            n_block_repeats = 5   #4*5 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 6:
            trial_rows = "0:4"
            n_block_repeats = 10   #4*10 = 40 trials
            modified_list_multiplier = list_multiplier

        # Generate list of stimuli for the block
        text_trial_type_1_trials = generate_trials('text_trial_type_1_exemplars', modified_list_multiplier)  # function and variable determined at begin exp.
        text_trial_type_2_trials = generate_trials('text_trial_type_2_exemplars', modified_list_multiplier)
        text_trial_type_3_trials = generate_trials('text_trial_type_3_exemplars', modified_list_multiplier)
        text_trial_type_4_trials = generate_trials('text_trial_type_4_exemplars', modified_list_multiplier)
        img_trial_type_1_trials = generate_trials('img_trial_type_1_exemplars', modified_list_multiplier)
        img_trial_type_2_trials = generate_trials('img_trial_type_2_exemplars', modified_list_multiplier)
        img_trial_type_3_trials = generate_trials('img_trial_type_3_exemplars', modified_list_multiplier)
        img_trial_type_4_trials = generate_trials('img_trial_type_4_exemplars', modified_list_multiplier)

        # set category and attribute labels based on the block order and current block
        if block_order == 1 and blocks.thisN <= 3:
            leftCategory = categoryA
            rightCategory = categoryB
        elif block_order == 1 and blocks.thisN > 3:
            leftCategory = categoryB
            rightCategory = categoryA
        elif block_order == 2 and blocks.thisN <= 3:
            leftCategory = categoryB
            rightCategory = categoryA
        elif block_order == 2 and blocks.thisN > 3:
            leftCategory = categoryA
            rightCategory = categoryB
    TextComponent instructionsBox
      letterHeight = 0.05
      startVal [time (s)] = 0.75
      text [set every repeat] = $instructions
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    KeyboardComponent instructionsKey
      allowedKeys = 'e', 'i'
      forceEndRoutine = True
      startVal [time (s)] = 2.75
      store = nothing
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    TextComponent leftCategoryLabel_2
      letterHeight = 0.1
      pos = [-.6, .85]
      startVal [time (s)] = 0.75
      text [set every repeat] = $leftCategory
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    TextComponent rightCategoryLabel_2
      letterHeight = 0.1
      pos = [.6, .85]
      startVal [time (s)] = 0.75
      text [set every repeat] = $rightCategory
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    TextComponent leftAttributeLabel_2
      color = $[-1, 1, -1]
      letterHeight = 0.1
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.75
      text [set every repeat] = $leftAttribute
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    TextComponent rightAttributeLabel_2
      color = $[-1, 1, -1]
      letterHeight = 0.1
      pos = [.6, 0.55]
      startVal [time (s)] = 0.75
      text [set every repeat] = $rightAttribute
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    TextComponent orLeft_2
      letterHeight = 0.1
      pos = [-.6, .7]
      startVal [time (s)] = 0.75
      text [set every repeat] = $orStimulus
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    TextComponent orRight_2
      letterHeight = 0.1
      pos = [.6, .7]
      startVal [time (s)] = 0.75
      text [set every repeat] = $orStimulus
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  Routine end
    TextComponent endBox
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 3
      text = End of the task
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instructions': 'Put your middle or index fingers on the E and I keys of your keyboard. Words representing the categories at the top will appear one-by-one in the middle of the screen. When the item belongs to a category on the left, press the E key; when the item belongs to a category on the right, press the I key. Items belong to only one category. If you make an error, an X will appear - fix the error by hitting the other key.\n\nThis is a timed sorting task. GO AS FAST AS YOU CAN while making as few mistakes as possible. Going too slow or making too many errors will result in an uninterp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,
      {'instructions': 'See above, the categories have changed. The items for sorting have changed as well. The rules, however, are the same.\n\nWhen the item belongs to a category on the left, press the E key; when the item belongs to a category on the right, press the I key. Items belong to only one category. An X appears after an error - fix the error by hitting the other key. GO AS FAST AS YOU CAN.\n\nPress E or I to continue.', 'categoryA': ' ', 'categoryB': ' ', 'leftAttribute': 'Good', 'rightAttribute': 'Bad', 'orStimulus': ' '},
      {'instructions': 'See above, the four categories you saw separately now appear together. Remember, each item belongs to only one group.\n\nThe green and white labels and items may help to identify the appropriate category. Use the E and I keys to categorize items into four groups left and right, and correct errors by hitting the other key.\n\nPress E or I to continue.', 'categoryA': 'African Americans', 'categoryB': 'European Americans', 'leftAttribute': 'Good', 'rightAttribute': 'Bad', 'orStimulus': 'or'},
      {'instructions': 'Sort the same four categories again. Remember to go as fast as you can while making as few mistakes as possible.\n\nThe green and white labels and items may help to identify the appropriate category. Use the E and I keys to categorize items into the four groups left and right, and correct errors by hitting the other key.\n\nPress E or I to continue.', 'categoryA': 'African Americans', 'categoryB': 'European Americans', 'leftAttribute': 'Good', 'rightAttribute': 'Bad', 'orStimulus': 'or'}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
    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $trial_rows
      conditionsFile = block_layout.xlsx
      loopType = fullRandom
      nReps = n_block_repeats
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      conditions:
        [{'trial_type': 1, 'stimulusText': 'text_trial_type_1', 'stimulusImage': 'img_trial_type_1'},
        {'trial_type': 2, 'stimulusText': 'text_trial_type_2', 'stimulusImage': 'img_trial_type_2'},
        {'trial_type': 3, 'stimulusText': 'text_trial_type_3', 'stimulusImage': 'img_trial_type_3'},
        {'trial_type': 4, 'stimulusText': 'text_trial_type_4', 'stimulusImage': 'img_trial_type_4'}]
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
